PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'condition': '', 'order': '', 'h_list': '', 't_list': '', 'c_list': '', 'run_h': '', 'run_t': '', 'run_c': '', 'ref_food_item': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/1permilk.jpg', 'stimuli/AA026307.png', 'stimuli/AA026337.png', 'stimuli/AA026339.png', 'stimuli/AA026360.png', 'stimuli/air popcorn.jpg', 'stimuli/american cheese.jpg', 'stimuli/apple slices.jpg', 'stimuli/avocado.jpg', 'stimuli/baby cheese.jpg', 'stimuli/bagel and cc.jpg', 'stimuli/bagel plain.jpg', 'stimuli/baguette oil.jpg', 'stimuli/baked potato.jpg', 'stimuli/banana.jpg', 'stimuli/broccoli cauliflower.jpg', 'stimuli/brownie.jpg', 'stimuli/burger.jpg', 'stimuli/celery and carrot sticks.jpg', 'stimuli/Cheese nachos.jpg', 'stimuli/cherries.jpg', 'stimuli/cherry tomato.jpg', 'stimuli/chicken nuggets2.jpg', 'stimuli/cookies.jpg', 'stimuli/corn cob.jpg', 'stimuli/cucumber slices.jpg', 'stimuli/cupcakes am.jpg', 'stimuli/doughnuts.jpg', 'stimuli/eggs.jpg', 'stimuli/french fries.jpg', 'stimuli/fried eggs.jpg', 'stimuli/froot loops w milk.jpg', 'stimuli/granola w milk.jpg', 'stimuli/Grapes.jpg', 'stimuli/green beans.jpg', 'stimuli/grilled cheese.jpg', 'stimuli/grilled chicken strips.jpg', 'stimuli/Hershey Kisses.jpg', 'stimuli/hotdog w must.jpg', 'stimuli/ice cream sundae 002.jpg', 'stimuli/kiwi.jpg', 'stimuli/lollipops.jpg', 'stimuli/m_and_m.jpg', 'stimuli/mac & cheese.jpg', 'stimuli/mashed potato.jpg', 'stimuli/mini muffins.jpg', 'stimuli/mozzarella sticks.jpg', 'stimuli/mushrooms.jpg', 'stimuli/orange slices.jpg', 'stimuli/PB.jpg', 'stimuli/peaches.jpg', 'stimuli/pickles.jpg', 'stimuli/pizza.jpg', 'stimuli/Pretzels.jpg', 'stimuli/raisin bran w milk.jpg', 'stimuli/raisins.jpg', 'stimuli/reeses.jpg', 'stimuli/rice cakes.jpg', 'stimuli/rigatoni and sauce.jpg', 'stimuli/rigatoni.jpg', 'stimuli/ritz.jpg', 'stimuli/salad w chicken.jpg', 'stimuli/saltines.jpg', 'stimuli/seaweed.jpg', 'stimuli/Skim milk.jpg', 'stimuli/soup with spoon.jpg', 'stimuli/sour patch.jpg', 'stimuli/soy chips.jpg', 'stimuli/steak.jpg', 'stimuli/strawberries.jpg', 'stimuli/string cheese.jpg', 'stimuli/sushi w_condiments.jpg', 'stimuli/tacos.jpg', 'stimuli/trail mix.jpg', 'stimuli/Tribe hummus pita.jpg', 'stimuli/turkey sandwich.jpg', 'stimuli/Whole milk.jpg', 'stimuli/yellow popcorn.jpg', 'stimuli/yellow rice_beans.jpg', 'stimuli/yogurt no spoon.jpg', 'stimuli/yogurt pretzels.jpg', 'order/Condition_1_HT.xlsx', 'order/Condition_1_TH.xlsx', 'order/Condition_2_HT.xlsx', 'order/Condition_2_TH.xlsx', 'lists/foodlist1.csv', 'lists/foodlist2.csv', 'lists/foodlist3.csv', 'lists/foodlist4.csv', 'lists/foodlist5.csv', 'lists/foodlist6.csv']
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(0.0000, 0.0000, 0.0000)
  expName = FCT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome_text
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    TextComponent welcome
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Welcome!
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    KeyboardComponent welcome_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Experiment:
        health_ratings = {}
        taste_ratings = {}
        ref_food_from_params = ""
        if expInfo['order'] == "TH":
            health_first = 0
            health_second = 1
        else:
            health_first = 1
            health_second = 0
        if expInfo['run_h'] == 0 or expInfo['run_h'] == '0':
            health_first = 0
            health_second = 0
        if expInfo['run_t'] == 0 or expInfo['run_t'] == '0':
            run_taste = 0
        else:
            run_taste = 1
        if expInfo['run_c'] == 0 or expInfo['run_c'] == '0':
            run_choice = 0
        else:
            run_choice = 1
            ref_food_from_params = expInfo['ref_food_item']
        if expInfo['condition'] == 1 or expInfo['condition'] == '1':
            rating_text_taste = "(1) ------ (2) ------ (3) ------ (4) ------ (5)\nBad ----------- Neutral ----------- Good"
            rating_text_health = "(1) ------ (2) ------ (3) ------ (4) ------ (5)\nUnhealthy ----------- Neutral ----------- Healthy"
            health_instruction2 = "You can rate each picture as \"Neutral\"\nor on a scale from \"Unhealthy\" to \"Healthy\".\n\n(1) ------ (2) ------ (3) ------ (4) ------ (5)\nUnhealthy ----------- Neutral ----------- Healthy\nPress \'space\' to continue."
            taste_instruction2 = "You can rate each picture as \"Neutral\"\nor on a scale from \"Bad\" to \"Good\".\n\n(1) ----- (2) ----- (3) ----- (4) ----- (5)\nBad ----------- Neutral ----------- Good\n\nIf you have not eaten that food in a long time\nor never eaten it,\nplease try to remember the last time you ate it\nor think of a comparable food and rate it \nas best you can for how tasty you think it is.\n\nYou can press \'space\' to continue."
        else:
            rating_text_taste = "(1) ------ (2) ------ (3) ------ (4) ------ (5)\nGood ----------- Neutral ----------- Bad"
            rating_text_health = "(1) ------ (2) ------ (3) ------ (4) ------ (5)\nHealthy ----------- Neutral ----------- Unhealthy"
            health_instruction2 = "You can rate each picture as \"Neutral\"\nor on a scale from \"Healthy\" to \"Unhealthy\".\n\n(1) ------ (2) ------ (3) ------ (4) ------ (5)\nHealthy ----------- Neutral ----------- Unhealthy\nPress \'space\' to continue."
            taste_instruction2 = "You can rate each picture as \"Neutral\"\nor on a scale from \"Good\" to \"Bad\".\n\n(1) ----- (2) ----- (3) ----- (4) ----- (5)\nGood ----------- Neutral ----------- Bad\n\nIf you have not eaten that food in a long time\nor never eaten it,\nplease try to remember the last time you ate it\nor think of a comparable food and rate it \nas best you can for how tasty you think it is.\n\nYou can press \'space\' to continue."
        thisExp.addData("rating_text_health", rating_text_health)
        thisExp.addData("rating_text_taste", rating_text_taste)
  Routine HealthInstruction1_1
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    TextComponent health_inst1_1_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will see a series of pictures of food.
        For each picture, please rate how HEALTHY you think it is.

        Press ‘space’ to continue.
    KeyboardComponent health_inst1_1_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_inst1_1_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_first == 0:
            continueRoutine = False
  Routine HealthInstruction2_1
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    TextComponent health_inst2_1_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $health_instruction2
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    KeyboardComponent health_inst2_1_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_inst2_1_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_first == 0:
            continueRoutine = False
  Routine HealthInstruction3_1
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    TextComponent health_inst3_1_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        There are no right or wrong answers.
        Please rate only according to
        how healthy or unhealthy you think that food is.
        It is important that you give an answer on each trial.

        Get ready! You can press ‘space’ to start the task.
    KeyboardComponent health_inst3_1_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_inst3_1_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_first == 0:
            continueRoutine = False
  Routine FixationHealth1
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    CodeComponent health_fix_1_code
      Code Type = Auto->JS
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      Begin Experiment:
        trials_start_time_health1 = 0
      Begin Routine:
        if trials_health1.thisN == 0:
            trials_start_time_health1 = globalClock.getTime()
        fixation_duration = trialstart + trials_start_time_health1 - globalClock.getTime()
        thisExp.addData("fixation_duration", fixation_duration)
    TextComponent health_fixationcross_1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text [set every repeat] = +
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  Routine FoodImageHealth1
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    ImageComponent food_image_health_1
      image [set every repeat] = $food
      pos = (0, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
      units = norm
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    TextComponent rating_health_1
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rating_text_health
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    KeyboardComponent key_resp_health1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent health_1_image_code
      Code Type = Auto->JS
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      Begin Routine:
        image_started_time = globalClock.getTime()
      End Routine:
        image_ended_time = globalClock.getTime()
        remainder = 4.0 - image_ended_time + image_started_time
        responded = 0
        wrongkey = 0
        food_item = trials_health1.thisTrial['food_item']
        if key_resp_health1.keys:
            responded = 1
            rating_given = str(key_resp_health1.keys[-1])
            if (rating_given == '1') or (rating_given == '2') or (rating_given == '3') or (rating_given == '4') or (rating_given == '5'):
                integer_rating = int(rating_given)
                if expInfo['condition'] == 1 or expInfo['condition'] == '1':
                    health_ratings[food_item] = integer_rating
                else:
                    health_ratings[food_item] = (6 - integer_rating)
                thisExp.addData("health_rating",health_ratings[food_item])
            else:
                wrongkey = 1
                remainder = 0
  Routine RemainderImageHealth1
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    ImageComponent health_remainder_1
      image [set every repeat] = $food
      pos = (0, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $remainder
      texture resolution = 512
      units = norm
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  Routine TooLateHealth1
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    CodeComponent health_1_toolate_code
      Code Type = Auto->JS
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      Begin Routine:
        if responded == 1:
            continueRoutine = False
    TextComponent health_1_tooLate_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Too late!
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  Routine EndOfBlock_health_1
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    TextComponent health_1_endblock_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        End of Block

        Press ‘space’ to continue.
    KeyboardComponent health_1_endblock_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_1_endblock_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_first == 0:
            continueRoutine = False
  Routine HealthInstruction1_2
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    TextComponent health_inst1_2_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will see a series of pictures of food.
        For each picture, please rate how HEALTHY you think it is.

        Press ‘space’ to continue.
    KeyboardComponent health_inst1_2_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_inst1_2_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_second == 0:
            continueRoutine = False
  Routine HealthInstruction2_2
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    TextComponent health_inst2_2_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $health_instruction2
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    KeyboardComponent health_inst2_2_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_inst2_2_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_second == 0:
            continueRoutine = False
  Routine HealthInstruction3_2
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    TextComponent health_inst3_2_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        There are no right or wrong answers.
        Please rate only according to
        how healthy or unhealthy you think that food is.
        It is important that you give an answer on each trial.

        Get ready! You can press ‘space’ to start the task.
    KeyboardComponent health_inst3_2_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_inst3_2_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_second == 0:
            continueRoutine = False
  Routine TasteInstruction3
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    TextComponent taste_inst3_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        There are no right or wrong answers.
        Please rate only according to
        how good or bad you think that food tastes.
        It is important that you give an answer on each trial.

        Get ready! You can press ‘space’ to start the task.
    KeyboardComponent taste_inst3_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent taste_inst3_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_taste == 0:
            continueRoutine = False
  Routine TasteInstruction1
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    TextComponent taste_inst1_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will see a series of pictures of food.
        For each picture, please rate how TASTY you think it is.

        Press ‘space’ to continue.
    KeyboardComponent taste_inst1_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent taste_inst1_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_taste == 0:
            continueRoutine = False
  Routine TasteInstruction2
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    TextComponent taste_inst2_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $taste_instruction2
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    KeyboardComponent taste_inst2_resp
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent taste_inst2_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_taste == 0:
            continueRoutine = False
  Routine FixationHealth2
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    CodeComponent health_fix_2_code
      Code Type = Auto->JS
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      Begin Experiment:
        trials_start_time_health2 = 0
      Begin Routine:
        if trials_health2.thisN == 0:
            trials_start_time_health2 = globalClock.getTime()
        fixation_duration = trialstart + trials_start_time_health2 - globalClock.getTime()
        thisExp.addData("fixation_duration", fixation_duration)
    TextComponent health_fixationcross_2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text [set every repeat] = +
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  Routine FixationTaste
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    CodeComponent taste_fix_code
      Code Type = Auto->JS
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      Begin Experiment:
        trials_start_time_taste = 0
      Begin Routine:
        if trials_taste.thisN == 0:
            trials_start_time_taste = globalClock.getTime()
        fixation_duration = trialstart + trials_start_time_taste - globalClock.getTime()
        thisExp.addData("fixation_duration", fixation_duration)
    TextComponent taste_fixationcross_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text [set every repeat] = +
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  Routine FoodImageHealth2
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    ImageComponent food_image_health2
      image [set every repeat] = $food
      pos = (0, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
      units = norm
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    TextComponent rating_health2
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rating_text_health
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    KeyboardComponent key_resp_health2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent health_2_image_code
      Code Type = Auto->JS
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      Begin Routine:
        image_started_time = globalClock.getTime()
      End Routine:
        image_ended_time = globalClock.getTime()
        remainder = 4.0 - image_ended_time + image_started_time
        responded = 0
        wrongkey = 0
        food_item = trials_health2.thisTrial['food_item']
        if key_resp_health2.keys:
            responded = 1
            rating_given = str(key_resp_health2.keys[-1])
            if (rating_given == '1') or (rating_given == '2') or (rating_given == '3') or (rating_given == '4') or (rating_given == '5'):
                integer_rating = int(rating_given)
                if expInfo['condition'] == 1 or expInfo['condition'] == '1':
                    health_ratings[food_item] = integer_rating
                else:
                    health_ratings[food_item] = (6 - integer_rating)
                thisExp.addData("health_rating",health_ratings[food_item])
            else:
                wrongkey = 1
                remainder = 0
  Routine FoodImageTaste
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    ImageComponent food_image_taste
      image [set every repeat] = $food
      pos = (0, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
      units = norm
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    TextComponent rating_taste
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rating_text_taste
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    KeyboardComponent key_resp_taste
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent taste_image_code
      Code Type = Auto->JS
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      Begin Routine:
        image_started_time = globalClock.getTime()
      End Routine:
        image_ended_time = globalClock.getTime()
        remainder = 4.0 - image_ended_time + image_started_time
        responded = 0
        wrongkey = 0
        food_item = trials_taste.thisTrial['food_item']
        if key_resp_taste.keys:
            responded = 1
            rating_given = str(key_resp_taste.keys[-1])
            if (rating_given == '1') or (rating_given == '2') or (rating_given == '3') or (rating_given == '4') or (rating_given == '5'):
                integer_rating = int(rating_given)
                if expInfo['condition'] == 1 or expInfo['condition'] == '1':
                    taste_ratings[food_item] = integer_rating
                else:
                    taste_ratings[food_item] = (6 - integer_rating)
                thisExp.addData("taste_rating",taste_ratings[food_item])
            else:
                wrongkey = 1
                remainder = 0
  Routine RemainderImageHealth2
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    ImageComponent health_2_remainder
      image [set every repeat] = $food
      pos = (0, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $remainder
      texture resolution = 512
      units = norm
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  Routine RemainderImageTaste
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    ImageComponent taste_remainder
      image [set every repeat] = $food
      pos = (0, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $remainder
      texture resolution = 512
      units = norm
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  Routine TooLateHealth2
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    CodeComponent health_2_toolate_code
      Code Type = Auto->JS
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      Begin Routine:
        if responded == 1:
            continueRoutine = False
    TextComponent health_2_tooLate_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Too late!
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  Routine TooLateTaste
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    CodeComponent taste_toolate_code
      Code Type = Auto->JS
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      Begin Routine:
        if responded == 1:
            continueRoutine = False
    TextComponent taste_tooLate_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Too late!
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  Routine EndOfBlock_health_2
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    TextComponent health_2_endblock_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        End of Block

        Press ‘space’ to continue.
    KeyboardComponent health_2_endblock_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent health_2_endblock_code
      Code Type = Auto->JS
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      Begin Routine:
        if health_second == 0:
            continueRoutine = False
  Routine EndOfBlock_taste
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    TextComponent taste_endblock_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        End of Block

        Press ‘space’ to continue.
    KeyboardComponent taste_endblock_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent taste_endblock_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_taste == 0:
            continueRoutine = False
  Routine GetReferenceFood
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    CodeComponent get_ref_food_code
      Code Type = Auto->JS
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      Begin Experiment:
        food_items = ["1permilk","air popcorn","american cheese","apple slices","avocado","baby cheese","bagel and cc","bagel plain","baguette oil","baked potato","banana","broccoli cauliflower","brownie","burger","celery and carrot sticks","Cheese nachos","cherries","cherry tomato","chicken nuggets2","cookies","corn cob","cucumber slices","cupcakes am","doughnuts","eggs","french fries","fried eggs","froot loops w milk","granola w milk","Grapes","green beans","grilled cheese","grilled chicken strips","Hershey Kisses","hotdog w must","ice cream sundae 002","kiwi","lollipops","m_and_m","mac & cheese","mashed potato","mini muffins","mozzarella sticks","mushrooms","orange slices","PB","peaches","pickles","pizza","Pretzels","raisin bran w milk","raisins","reeses","rice cakes","rigatoni","rigatoni and sauce","ritz","salad w chicken","saltines","seaweed","Skim milk","soup with spoon","sour patch","soy chips","steak","strawberries","string cheese","sushi w_condiments","tacos","trail mix","Tribe hummus pita","turkey sandwich","Whole milk","yellow popcorn","yogurt no spoon","yogurt pretzels"]
        ref_food = "saltines"
        found_ref_food = 0
        if ref_food_from_params != "":
            ref_food = ref_food_from_params
            found_ref_food = 1
      Begin Routine:
        if found_ref_food == 0:
            for i in range(len(food_items)):
                food_item = food_items[i]
                if (health_ratings[food_item] == 3) & (taste_ratings[food_item] == 3):
                    found_ref_food = 1
                    ref_food = food_item
                    break
        if found_ref_food == 0:
            for i in range(len(food_items)):
                food_item = food_items[i]
                if (health_ratings[food_item] == 4) & (taste_ratings[food_item] == 3):
                    found_ref_food = 1
                    ref_food = food_item
                    break
                if (health_ratings[food_item] == 3) & (taste_ratings[food_item] == 4):
                    found_ref_food = 1
                    ref_food = food_item
                    break
        if found_ref_food == 0:
            for i in range(len(food_items)):
                food_item = food_items[i]
                if (health_ratings[food_item] == 2) & (taste_ratings[food_item] == 3):
                    found_ref_food = 1
                    ref_food = food_item
                    break
                if (health_ratings[food_item] == 3) & (taste_ratings[food_item] == 2):
                    found_ref_food = 1
                    ref_food = food_item
                    break
        thisExp.addData("ref_food", ref_food)
  Routine ChoiceInstruction1
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    ImageComponent ref_image_instruction1
      image [set every repeat] = $"stimuli/"+ref_food+".jpg"
      pos = (0, -0.25)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    TextComponent ref_text_instruction1
      letterHeight = 0.035
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Now you will be asked to choose a food to eat.
        On each trial, you will see
        this reference food on the left - it is always the same.
        On the right the choice will change on each trial.
        Press ‘space’ to continue.
    KeyboardComponent ref_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent choice_inst1_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_choice == 0:
            continueRoutine = False
  Routine ChoiceInstruction2
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    TextComponent choice_instruction2_text
      letterHeight = 0.035
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        For each picture, indicate whether you “Prefer” or
        “Strongly prefer” the food on the right or instead “Prefer” or
        “Strongly prefer” the reference food on the left. If you
        really cannot choose between the two pictures, you may
        indicate “Neutral”. Press ‘space’ to continue.
    TextComponent c_rating
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        (1) ------- (2) ------- (3) ------- (4) ------- (5)
        Strongly prefer -- Prefer -- Neutral -- Prefer -- Strongly prefer
    ImageComponent blueberry
      image = stimuli/AA026339.png
      pos = (-0.35, -0.15)
      size = (0.45, 0.6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    ImageComponent raspberry
      image = stimuli/AA026337.png
      pos = (0.35, -0.15)
      size = (0.45, 0.6)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = norm
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    KeyboardComponent choice_instruction2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent choice_inst2_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_choice == 0:
            continueRoutine = False
  Routine ChoiceInstruction3
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    KeyboardComponent choice_instruction3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent choice_instruction3_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Please be sure your choices accurately
        reflect your preferences. Imagine that you will be asked to eat
        a snack sized portion of one of your preferred items,
        randomly selected at the end of the task.

        Get ready! You can press ‘space’ to start the task.
    CodeComponent choice_inst3_code
      Code Type = Auto->JS
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      Begin Routine:
        if run_choice == 0:
            continueRoutine = False
  Routine FixationChoice
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    CodeComponent choice_fix_code
      Code Type = Auto->JS
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      Begin Experiment:
        trials_start_time_choice = 0
      Begin Routine:
        if trials_choice.thisN == 0:
            trials_start_time_choice = globalClock.getTime()
        fixation_duration = trialstart + trials_start_time_choice - globalClock.getTime()
        thisExp.addData("fixation_duration", fixation_duration)
        if trials_choice.thisTrial['food_item'] == ref_food:
            food_image_display = "stimuli/yellow rice_beans.jpg"
        else:
            food_image_display = trials_choice.thisTrial['food']
        thisExp.addData("choice_image_displayed", food_image_display)
    TextComponent choice_fixationcross_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text [set every repeat] = +
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  Routine FoodImageChoice
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    ImageComponent food_image_choice
      image [set every repeat] = $food_image_display
      pos = (0.35, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
      units = norm
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    TextComponent rating_choice
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        (1) ------- (2) ------- (3) ------- (4) ------- (5)
        Strongly prefer -- Prefer -- Neutral -- Prefer -- Strongly prefer
    KeyboardComponent key_resp_choice
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent choice_image_code
      Code Type = Auto->JS
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      Begin Experiment:
        food_image_display = ""
      Begin Routine:
        image_started_time = globalClock.getTime()
      End Routine:
        image_ended_time = globalClock.getTime()
        remainder = 4.0 - image_ended_time + image_started_time
        responded = 0
        wrongkey = 0
        if key_resp_choice.keys:
            responded = 1
            rating_given = str(key_resp_choice.keys[-1])
            if (rating_given == '1') or (rating_given == '2') or (rating_given == '3') or (rating_given == '4') or (rating_given == '5'):
                integer_rating = int(rating_given)
                thisExp.addData("choice_rating", integer_rating)
            else:
                wrongkey = 1
                remainder = 0
    ImageComponent reference_food_image
      image [set every repeat] = $"stimuli/"+ref_food+".jpg"
      pos = (-0.35, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      texture resolution = 512
      units = norm
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  Routine RemainderImageChoice
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    ImageComponent food_image_choice_remainder
      image [set every repeat] = $food_image_display
      pos = (0.35, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $remainder
      texture resolution = 512
      units = norm
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    ImageComponent reference_food_image_remainder
      image [set every repeat] = $"stimuli/"+ref_food+".jpg"
      pos = (-0.35, 0.2)
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $remainder
      texture resolution = 512
      units = norm
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  Routine TooLateChoice
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    CodeComponent choice_toolate_code
      Code Type = Auto->JS
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      Begin Routine:
        if responded == 1:
            continueRoutine = False
    TextComponent choice_tooLate_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Too late!
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  Routine EndOfBlock_Choice
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    TextComponent choice_endblock_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        End of Block!

        Thank you for your participation :)
    KeyboardComponent choice_endblock_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WrongKeyHealth1
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    TextComponent wrongkeyhealth1
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = WRONG KEY
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    CodeComponent wk_health1_code
      Code Type = Auto->JS
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      Begin Routine:
        if wrongkey == 0:
            continueRoutine = False
  Routine WrongKeyHealth2
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    TextComponent wrongkeyhealth2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = WRONG KEY
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    CodeComponent wk_health2_code
      Code Type = Auto->JS
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      Begin Routine:
        if wrongkey == 0:
            continueRoutine = False
  Routine WrongKeyTaste
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    TextComponent wrongkeytaste
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = WRONG KEY
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    CodeComponent wk_taste_code
      Code Type = Auto->JS
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      Begin Routine:
        if wrongkey == 0:
            continueRoutine = False
  Routine WrongKeyChoice
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    TextComponent wrongkeychoice
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = WRONG KEY
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    CodeComponent wk_choice_code
      Code Type = Auto->JS
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      Begin Routine:
        if wrongkey == 0:
            continueRoutine = False
Flow
  Routine Welcome_text
  Routine HealthInstruction1_1
  Routine HealthInstruction2_1
  Routine HealthInstruction3_1
  LoopInitiator trials_health1 loopType="TrialHandler"
    conditionsFile = $"lists/foodlist" + expInfo['h_list'] + ".csv"
    loopType = sequential
    nReps = $health_first
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    Routine FixationHealth1
    Routine FoodImageHealth1
    Routine WrongKeyHealth1
    Routine RemainderImageHealth1
    Routine TooLateHealth1
  LoopTerminator trials_health1
  Routine EndOfBlock_health_1
  Routine TasteInstruction1
  Routine TasteInstruction2
  Routine TasteInstruction3
  LoopInitiator trials_taste loopType="TrialHandler"
    conditionsFile = $"lists/foodlist" + expInfo['t_list'] + ".csv"
    loopType = sequential
    nReps = $run_taste
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    Routine FixationTaste
    Routine FoodImageTaste
    Routine WrongKeyTaste
    Routine RemainderImageTaste
    Routine TooLateTaste
  LoopTerminator trials_taste
  Routine EndOfBlock_taste
  Routine HealthInstruction1_2
  Routine HealthInstruction2_2
  Routine HealthInstruction3_2
  LoopInitiator trials_health2 loopType="TrialHandler"
    conditionsFile = $"lists/foodlist" + expInfo['h_list'] + ".csv"
    loopType = sequential
    nReps = $health_second
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    Routine FixationHealth2
    Routine FoodImageHealth2
    Routine WrongKeyHealth2
    Routine RemainderImageHealth2
    Routine TooLateHealth2
  LoopTerminator trials_health2
  Routine EndOfBlock_health_2
  Routine GetReferenceFood
  Routine ChoiceInstruction1
  Routine ChoiceInstruction2
  Routine ChoiceInstruction3
  LoopInitiator trials_choice loopType="TrialHandler"
    conditionsFile = $"lists/foodlist" + expInfo['c_list'] + ".csv"
    loopType = sequential
    nReps = $run_choice
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    Routine FixationChoice
    Routine FoodImageChoice
    Routine WrongKeyChoice
    Routine RemainderImageChoice
    Routine TooLateChoice
  LoopTerminator trials_choice
  Routine EndOfBlock_Choice
